PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = DichoticListeningProbe
  frameRateMsg = Espera mientras se configura el experimento...
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Listening
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    CodeComponent code_listening
      Code Type = Auto->JS
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      Begin Routine:
        # Add to log
        thisExp.addData('attended_story', attended_story)
        thisExp.addData('audio_filepath', audio_filepath)
        thisExp.addData('target_label', target_label)
        thisExp.addData('story_L', story_L)
        thisExp.addData('story_R', story_R)
        thisExp.addData('voice_L', voice_L)
        thisExp.addData('voice_R', voice_R)
        thisExp.addData('target', target)

        audiobook = metadata['audios'][condition_trials.thisN]
        sent_start = False
        sent_end = False
      Each Frame:
        if not sent_start:
            # win.callOnFlip(port.write, bytes([int(99)]))
            # win.callOnFlip(port.flush)
            win.callOnFlip(print, 99)
            win.callOnFlip(audiobook.play)
            # win.callOnFlip(port.write, bytes([int(100)]))
            # win.callOnFlip(port.flush)
            win.callOnFlip(print, 100)
            win.callOnFlip(setattr, audiobook, 'status', STARTED)
            win.callOnFlip(thisExp.addData, "time_audiobook_started", tThisFlipGlobal)
            sent_start = True

        # OFFSE T EXACTO al terminar el audio
        if audiobook.status == STARTED and audiobook.isFinished and not sent_end:
            #port.write(bytes([int(105)]))
            #port.flush()
            print(105)
            thisExp.addData("time_audiobook_finished", tThisFlipGlobal)
            audiobook.stop()
            sent_end = True
            continueRoutine = False
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0
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  Routine Instructions
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    CodeComponent code_row_selection
      Code Type = Auto->JS
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      Before Experiment:
        #import serial
        #port = serial.Serial(
        #    'COM3', # the port the device is connected to
        #    baudrate=115200, # FIXME speed of communication
        #    bytesize=serial.EIGHTBITS, # number of bits
        #    parity=serial.PARITY_NONE, # extra bit for error detection
        #    stopbits=serial.STOPBITS_ONE, # number of bits after each byte of communication
        #    timeout=0, # timeout for reading
        #    write_timeout=0
        #)

        # # For calling
        # #port.write(bytes(int(2)))
        # #port.flush(
        ##   )# # waits until all data currently in the output buffer (data waiting to be transmitted) has been completely sent to the peer device. It does not discard the data; it ensures that the transmission is complete before the program proceeds.

        # # Another option
        # #port.write(bytes(int(2)))
        # #port.reset_output_buffer(
        # #    )#  in contrast, immediately discards any data in the output buffer without sending it.
      Begin Experiment:
        from psychopy import sound
        import pandas as pd
        import numpy as np

        NUMBER_OF_PAIRS = 7
        LETTER_SIZE = .035

        # Read conditions, possible stimuli combinations and questionaries
        conditions = pd.read_csv(
            "conditions.csv",
            delimiter=',',
            header=0
        )
        audiobook_questionary = pd.read_csv(
            "audiobook_questionary.csv",
            delimiter=',',
            header=0
        )
        audiobook_combinations = pd.read_csv(
            #"audiobook_combinations_probes.csv",
            #"audiobook_combinations_no_probes.csv",
            "audiobook_combinations_short.csv",
            delimiter=',',
            header=0
        )
        # Sample conditions
        conditions = conditions.sample(
            n=NUMBER_OF_PAIRS
        ).reset_index()
        # Add 1st number of corresponding pair: 1,3,5,7, ...
        conditions['n_story'] = list(
            (np.arange(NUMBER_OF_PAIRS)+1) * 2 - 1
        )

        # Store in memory audiobooks and relevant parameters
        metadata = {
            "attended_stories" : [],
            "audio_filepaths" : [],
            "questionaries" : [],
            "target_labels" : [],
            "book_name" : [],
            "stories_L" : [],
            "stories_R" : [],
            "voices_L" : [],
            "voices_R" : [],
            "targets" : [],
            "audios" : []
        }
        for n_r, row in enumerate(conditions.itertuples()):
            # Select audiobook based on condition and story numbers
            filter_A = audiobook_combinations['condition_label']==row.target_label
            filter_B = audiobook_combinations['story_L']==row.n_story
            filter_C = audiobook_combinations['story_R']==row.n_story
            selected_audiobook = audiobook_combinations[
                filter_A & (filter_B | filter_C)
            ].iloc[0]

            # Get relevant metadata
            metadata['attended_stories'].append(selected_audiobook[f'story_{row.target}'])
            metadata['audio_filepaths'].append(selected_audiobook['filename'])
            metadata['target_labels'].append(row.target_label)
            metadata['stories_L'].append(selected_audiobook['story_L'])
            metadata['stories_R'].append(selected_audiobook['story_R'])
            metadata['voices_R'].append(selected_audiobook['voice_R'])
            metadata['voices_L'].append(selected_audiobook['voice_L'])

            metadata['targets'].append(row.target)
            metadata['audios'].append(
                sound.Sound(selected_audiobook['filename'], hamming=True)
            )
            selected_quest = audiobook_questionary[
                   audiobook_questionary['book_number']==metadata['attended_stories'][-1]
                ].iloc[0]
            metadata['book_name'].append(selected_quest['book_name'])
            metadata['questionaries'].append(selected_quest)
            print(
                f"\nAttended story: {metadata['attended_stories'][-1]}"
                f"\nAudio filepath: {metadata['audio_filepaths'][-1]}"
                f"\nAudiobook name: {metadata['book_name'][-1]}"
                f"\nTarget label: {metadata['target_labels'][-1]}"
                f"\nTarget: {metadata['targets'][-1]}"
            )

        # Store selected rows in the experiment data
        thisExp.addData(
            'selected_rows',
            list(conditions['index'])
        )

        print(conditions)
        print(metadata['attended_stories'])
        print(metadata['audio_filepaths'])
        print(metadata['targets'])
        print(metadata['audios'])
      Begin Routine:
        sent_start = False
        sent_end = False
      Each Frame:
        if text_instructions.status == STARTED and not sent_start:
            #win.callOnFlip(port.write, bytes([int(25)]))
            #win.callOnFlip(port.flush)
            win.callOnFlip(print, 25)
            sent_start = True

        waitOnFlip = False
        if key_instructions.status == STARTED and not waitOnFlip:
            theseKeys = key_instructions.getKeys(keyList=['space'], ignoreKeys=["escape"], waitRelease=False)
            _key_instructions_allKeys.extend(theseKeys)
            if len(_key_instructions_allKeys):
                key_instructions.keys = _key_instructions_allKeys[-1].name
                key_instructions.rt = _key_instructions_allKeys[-1].rt
                key_instructions.duration = _key_instructions_allKeys[-1].duration
                if not sent_end:
                    #port.write(bytes([int(30)]))
                    #port.flush()
                    print(30)
                    sent_end = True
                continueRoutine = False
    KeyboardComponent key_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent text_instructions
      letterHeight [set every repeat] = LETTER_SIZE
      startVal [time (s)] = 2
      stopVal [condition] = key_instructions.status == FINISHED
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      text:
        En cada ensayo escucharás dos historias simultáneas (una en cada oído). Tus tareas son

        1) Mantenerte quieto/a y mirar la cruz central.

        2) Prestar atención sólo a la historia indicada.

        3) Responder las preguntas con el teclado.

        Presioná ESPACIO para continuar...
  Routine Questionary3
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  Routine GoodBye
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    CodeComponent code_bye
      Code Type = Auto->JS
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      Begin Routine:
        sent_start = False
        sent_end = False
      Each Frame:
        if final_text.status == STARTED and not sent_start:
            # win.callOnFlip(port.write, bytes([int(230)]))
            # win.callOnFlip(port.flush)
            win.callOnFlip(print, 230)
            sent_start = True

        waitOnFlip = False
        if final_key.status == STARTED and not waitOnFlip:
            theseKeys = final_key.getKeys(keyList=['space'], ignoreKeys=["escape"], waitRelease=False)
            _final_key_allKeys.extend(theseKeys)
            if len(_final_key_allKeys):
                final_key.keys = _final_key_allKeys[-1].name
                final_key.rt = _final_key_allKeys[-1].rt
                final_key.duration = _final_key_allKeys[-1].duration
                if not sent_end:
                    # port.write(bytes([int(250)]))
                    # port.flush()
                    print(250)
                    sent_end = True
                continueRoutine = False
    KeyboardComponent final_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent final_text
      letterHeight [set every repeat] = LETTER_SIZE
      startVal [time (s)] = 0.0
      stopVal [condition] = final_key.status == FINISHED
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      text:
        ¡Listo! Terminó el experimento. ¡Gracias por participar!



        Apretá ESPACIO para finalizar...
  Routine Bips
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    CodeComponent code_bip
      Code Type = Auto->JS
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      Begin Routine:
        if currentLoop.name == "bip_trials1":
            trigger = 45
        else:
            trigger = 150

        sent_start = False
        sent_end = False
        # When the loop reaches the end, there will be no silence added
        #if currentLoop.thisN == (currentLoop.nTotal - 1):
        #    final_silence.status = FINISHED
      Each Frame:
        if bip.status == STARTED and not sent_start:
            #win.callOnFlip(port.write, bytes([int(trigger+currentLoop.thisN*3)]))
            #win.callOnFlip(port.flush)
            win.callOnFlip(print, int(trigger + currentLoop.thisN * 3))
            sent_start = True
        if bip.status == STARTED and not sent_end:
            finished = False
            if hasattr(bip, "isPlaying"):
                finished = not bip.isPlaying
            if bip.isFinished:
                finished = True
            if finished:
                #port.write(bytes([int(trigger+currentLoop.thisN*3)+1]))
                #port.flush()
                print(int(trigger + currentLoop.thisN * 3 + 1))
                sent_end = True
                continueRoutine = False
    SoundComponent bip
      forceEndRoutine = False
      sound [set every repeat] = ../data/stimuli/processed_audios/bip.ogg
      startVal [frame N] = 0.0
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    PolygonComponent fixation_bip
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [condition] = bip.status == FINISHED
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    PolygonComponent final_silence
      disabled = True
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [condition] = bip.status==FINISHED
      stopVal [duration (s)] = 0.5
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  Routine ConditionPrompt
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    CodeComponent code_prompt
      Code Type = Auto->JS
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      Begin Routine:
        sent_start = False
        sent_end = False

        # Define condition variables
        attended_story = metadata['attended_stories'][condition_trials.thisN]
        audio_filepath = metadata['audio_filepaths'][condition_trials.thisN]
        target_label = metadata['target_labels'][condition_trials.thisN]
        questionary = metadata['questionaries'][condition_trials.thisN]
        story_L = metadata['stories_L'][condition_trials.thisN]
        story_R = metadata['stories_R'][condition_trials.thisN]
        voice_L = metadata['voices_L'][condition_trials.thisN]
        voice_R = metadata['voices_R'][condition_trials.thisN]
        target = metadata['targets'][condition_trials.thisN]

        # Text prompt
        flecha, lado = ('<<<', 'IZQUIERDO') if target=='L' else ('>>>', 'DERECHO')

        # Define questionary elements
        correct_answers = []
        questions = []
        answers_a = []
        answers_b = []
        answers_c = []
        for i in range(1, 4):
            correct_answer = questionary[f'correct_answer{i}']
            question = questionary[f'question{i}']
            answer_a = questionary[f'answer{i}a']
            answer_b = questionary[f'answer{i}b']
            answer_c = questionary[f'answer{i}c']
            correct_answers.append(correct_answer)
            questions.append(question)
            answers_a.append(answer_a)
            answers_b.append(answer_b)
            answers_c.append(answer_c)
      Each Frame:
        if text_prompt.status == STARTED and not sent_start:
            #win.callOnFlip(port.write, bytes([int(35)]))
            #win.callOnFlip(port.flush)
            win.callOnFlip(print, 35)
            sent_start = True

        waitOnFlip = False
        if key_resp_prompt.status == STARTED and not waitOnFlip:
            theseKeys = key_resp_prompt.getKeys(keyList=['space'], ignoreKeys=["escape"], waitRelease=False)
            _key_resp_prompt_allKeys.extend(theseKeys)
            if len(_key_resp_prompt_allKeys):
                key_resp_prompt.keys = _key_resp_prompt_allKeys[-1].name
                key_resp_prompt.rt = _key_resp_prompt_allKeys[-1].rt
                key_resp_prompt.duration = _key_resp_prompt_allKeys[-1].duration
                if not sent_end:
                    #port.write(bytes([int(40)]))
                    #port.flush()
                    print(40)
                    sent_end = True
                continueRoutine = False
    TextComponent text_prompt
      letterHeight [set every repeat] = LETTER_SIZE
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp_prompt.status == FINISHED
      text [set every repeat] = $f"Presta atención a la historia del lado {lado} ({flecha}).\n\n\nApretá ESPACIO para continuar..."
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    KeyboardComponent key_resp_prompt
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Questionary
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    CodeComponent code_questionary
      Code Type = Auto->JS
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      Begin Routine:
        question = questions[questions_trial.thisRepN-1]
        correct_answer = correct_answers[questions_trial.thisRepN-1]
        answer_a = answers_a[questions_trial.thisRepN-1]
        answer_b = answers_b[questions_trial.thisRepN-1]
        answer_c = answers_c[questions_trial.thisRepN-1]

        #port.write(bytes([int(200+currentLoop.thisN*3)]))
        print(int(200+currentLoop.thisN*3))

        thisExp.addData(f'correct_answer{questions_trial.thisRepN-1}', correct_answer)
        thisExp.addData(f'question{questions_trial.thisRepN-1}', question)
        thisExp.addData(f'answer_a{questions_trial.thisRepN-1}', answer_a)
        thisExp.addData(f'answer_b{questions_trial.thisRepN-1}', answer_b)
        thisExp.addData(f'answer_c{questions_trial.thisRepN-1}', answer_c)
      End Routine:
        #port.write(bytes([int(200+1+currentLoop.thisN*3)]))
        print(int(200+1+currentLoop.thisN*3))
    KeyboardComponent key_resp_questionary
      allowedKeys = 'a', 'b', 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent questionary_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp_questionary.status == FINISHED
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      text [set every repeat]:
        $f"{question}\n\n A: {answer_a}\n\n B: {answer_b}\n\n C: {answer_c}\n\n Presioná la opción que creas correcta (teclas A, B ó C)"
  Routine QuestionaryVariables
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    CodeComponent code_questionary_2
      Code Type = Auto->JS
  Routine Listening1
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    SoundComponent sound_1
      forceEndRoutine = False
      sound [set every repeat] = C:/Users/jocta/repos/Dichotic/data/processed_audios/attention_probe.wav
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
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  Routine Questionary0
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    CodeComponent code_questionary0
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData(f'correct_answer0', correct_answers[0])
        thisExp.addData(f'question0', questions[0])
        thisExp.addData(f'answer_a0', answers_a[0])
        thisExp.addData(f'answer_b0', answers_b[0])
        thisExp.addData(f'answer_c0', answers_c[0])

        sent_start = False
        sent_end = False
      Each Frame:
        if questionary_text0.status == STARTED and not sent_start:
            # win.callOnFlip(port.write, bytes([int(200 + 0 * 3)]))
            # win.callOnFlip(port.flush)
            win.callOnFlip(print, int(200 + 0 * 3))
            sent_start = True

        waitOnFlip = False
        if key_resp_questionary0.status == STARTED and not waitOnFlip:
            theseKeys = key_resp_questionary0.getKeys(keyList=['a','b','c'], ignoreKeys=["escape"], waitRelease=False)
            _key_resp_questionary0_allKeys.extend(theseKeys)
            if len(_key_resp_questionary0_allKeys):
                key_resp_questionary0.keys = _key_resp_questionary0_allKeys[-1].name
                key_resp_questionary0.rt = _key_resp_questionary0_allKeys[-1].rt
                key_resp_questionary0.duration = _key_resp_questionary0_allKeys[-1].duration
                if not sent_end:
                    # port.write(bytes([int(200 + 0 * 3+1)]))
                    # port.flush()
                    print(int(200 + 0 * 3 + 1))
                    sent_end = True
                continueRoutine = False
    TextComponent questionary_text0
      letterHeight [set every repeat] = LETTER_SIZE
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp_questionary0.status == FINISHED
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      text [set every repeat]:
        $f"{questions[0]}\n\n A: {answers_a[0]}\n\n B: {answers_b[0]}\n\n C: {answers_c[0]}\n\n Presioná la opción que creas correcta (teclas A, B ó C)"
    KeyboardComponent key_resp_questionary0
      allowedKeys = 'a','b','c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Questionary1
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    CodeComponent code_questionary1
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData(f'correct_answer1', correct_answers[1])
        thisExp.addData(f'question1', questions[1])
        thisExp.addData(f'answer_a1', answers_a[1])
        thisExp.addData(f'answer_b1', answers_b[1])
        thisExp.addData(f'answer_c1', answers_c[1])
        sent_start = False
        sent_end = False
      Each Frame:
        if questionary_text1.status == STARTED and not sent_start:
            # win.callOnFlip(port.write, bytes([int(200 + 1 * 3)]))
            # win.callOnFlip(port.flush)
            win.callOnFlip(print, int(200 + 1 * 3))
            sent_start = True
        waitOnFlip = False
        if key_resp_questionary1.status == STARTED and not waitOnFlip:
            theseKeys = key_resp_questionary1.getKeys(keyList=['a','b','c'], ignoreKeys=["escape"], waitRelease=False)
            _key_resp_questionary1_allKeys.extend(theseKeys)
            if len(_key_resp_questionary1_allKeys):
                key_resp_questionary1.keys = _key_resp_questionary1_allKeys[-1].name
                key_resp_questionary1.rt = _key_resp_questionary1_allKeys[-1].rt
                key_resp_questionary1.duration = _key_resp_questionary1_allKeys[-1].duration
                if not sent_end:
                    # port.write(bytes([int(200 + 1 * 3 +1)]))
                    # port.flush()
                    print(int(200 + 1 * 3 + 1))
                    sent_end = True
                continueRoutine = False
    TextComponent questionary_text1
      letterHeight [set every repeat] = LETTER_SIZE
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp_questionary1.status == FINISHED
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      text [set every repeat]:
        $f"{questions[1]}\n\n A: {answers_a[1]}\n\n B: {answers_b[1]}\n\n C: {answers_c[1]}\n\n Presioná la opción que creas correcta (teclas A, B ó C)"
    KeyboardComponent key_resp_questionary1
      allowedKeys = 'a','b','c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Questionary2
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    CodeComponent code_questionary2
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData(f'correct_answer2', correct_answers[2])
        thisExp.addData(f'question2', questions[2])
        thisExp.addData(f'answer_a2', answers_a[2])
        thisExp.addData(f'answer_b2', answers_b[2])
        thisExp.addData(f'answer_c2', answers_c[2])

        sent_start = False
        sent_end = False
      Each Frame:
        if questionary_text2.status == STARTED and not sent_start:
            # win.callOnFlip(port.write, bytes([int(200 + 2 * 3)]))
            # win.callOnFlip(port.flush)
            win.callOnFlip(print, int(200 + 2 * 3))
            sent_start = True

        waitOnFlip = False
        if key_resp_questionary2.status == STARTED and not waitOnFlip:
            theseKeys = key_resp_questionary2.getKeys(keyList=['a','b','c'], ignoreKeys=["escape"], waitRelease=False)
            _key_resp_questionary2_allKeys.extend(theseKeys)
            if len(_key_resp_questionary2_allKeys):
                key_resp_questionary2.keys = _key_resp_questionary2_allKeys[-1].name
                key_resp_questionary2.rt = _key_resp_questionary2_allKeys[-1].rt
                key_resp_questionary2.duration = _key_resp_questionary2_allKeys[-1].duration
                if not sent_end:
                    # port.write(bytes([int(200 + 2 * 3 +1)]))
                    # port.flush()
                    print(int(200 + 2 * 3 + 1))
                    sent_end = True
                continueRoutine = False
    TextComponent questionary_text2
      letterHeight [set every repeat] = LETTER_SIZE
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp_questionary2.status == FINISHED
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      text [set every repeat]:
        $f"{questions[2]}\n\n A: {answers_a[2]}\n\n B: {answers_b[2]}\n\n C: {answers_c[2]}\n\n Presioná la opción que creas correcta (teclas A, B ó C)"
    KeyboardComponent key_resp_questionary2
      allowedKeys = 'a','b','c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator condition_trials loopType="TrialHandler"
    loopType = sequential
    nReps = NUMBER_OF_PAIRS
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    conditions:
      [OrderedDict([('ordered', np.True_), ('voice_L', 'F'), ('voice_R', 'M'), ('target', 'L'), ('target_label', 'O_F_M')]),
      OrderedDict([('ordered', np.True_), ('voice_L', 'F'), ('voice_R', 'M'), ('target', 'R'), ('target_label', 'O_F_M')]),
      OrderedDict([('ordered', np.True_), ('voice_L', 'M'), ('voice_R', 'F'), ('target', 'L'), ('target_label', 'O_M_F')]),
      OrderedDict([('ordered', np.True_), ('voice_L', 'M'), ('voice_R', 'F'), ('target', 'R'), ('target_label', 'O_M_F')]),
      OrderedDict([('ordered', np.False_), ('voice_L', 'F'), ('voice_R', 'M'), ('target', 'L'), ('target_label', 'NO_F_M')]),
      OrderedDict([('ordered', np.False_), ('voice_L', 'F'), ('voice_R', 'M'), ('target', 'R'), ('target_label', 'NO_F_M')]),
      OrderedDict([('ordered', np.False_), ('voice_L', 'M'), ('voice_R', 'F'), ('target', 'L'), ('target_label', 'NO_M_F')]),
      OrderedDict([('ordered', np.False_), ('voice_L', 'M'), ('voice_R', 'F'), ('target', 'R'), ('target_label', 'NO_M_F')])]
    Routine ConditionPrompt
    LoopInitiator bip_trials1 loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 15
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      Routine Bips
    LoopTerminator bip_trials1
    Routine Listening
    LoopInitiator bip_trials2 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 15
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      Routine Bips
    LoopTerminator bip_trials2
    Routine Questionary0
    Routine Questionary1
    Routine Questionary2
  LoopTerminator condition_trials
  Routine GoodBye
