PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = dichotic_listening
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Listening
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    CodeComponent audiobook_code
      Code Type = Auto->JS
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      Before Experiment:
        import pandas as pd
        audiobook_combinations = pd.read_csv(
            "audiobook_combinations_probes_pruebas.csv",
            header=0,
            delimiter=','
        )
        audiobook_questionary = pd.read_csv(
            "audiobook_questionary.csv",
            header=0,
            delimiter=','
        )
      Begin Routine:
        n_story = (condition_trials.thisN+1)*2-1

        # Define filepath and attended story
        filter_condition = audiobook_combinations['condition_label']==condition_label
        audiobooks_possible_combinations = audiobook_combinations[filter_condition]
        filter_A = audiobooks_possible_combinations['number_story_A']==n_story
        filter_B = audiobooks_possible_combinations['number_story_B']==n_story
        selected_audiobook = audiobooks_possible_combinations[filter_A|filter_B]
        audio_filepath = selected_audiobook['filename'].values[0]
        attended = 'number_story_A' if target=='Left' else 'number_story_B'
        attended_story = selected_audiobook[attended].values[0]

        # Add to log
        thisExp.addData('audio_filepath', audio_filepath)
        thisExp.addData('attended_story', attended_story)

        # Define new variables
        correct_answers = []
        questions = []
        answers_a = []
        answers_b = []
        answers_c = []
        questionary = audiobook_questionary.iloc[attended_story-1]
        for i in range(1, 4):
            correct_answer = questionary[f'correct_answer{i}']
            question = questionary[f'question{i}']
            answer_a = questionary[f'answer{i}a']
            answer_b = questionary[f'answer{i}b']
            answer_c = questionary[f'answer{i}c']
            correct_answers.append(correct_answer)
            questions.append(question)
            answers_a.append(answer_a)
            answers_b.append(answer_b)
            answers_c.append(answer_c)
            # Add to log
            thisExp.addData(f'correct_answer{i}', correct_answer)
            thisExp.addData(f'question{i}', question)
            thisExp.addData(f'answer{i}a', answer_a)
            thisExp.addData(f'answer{i}b', answer_b)
            thisExp.addData(f'answer{i}c', answer_c)
    SoundComponent audiobook
      forceEndRoutine = False
      sound [set every repeat] = $audio_filepath
      speakerIndex = 0.0
      startVal [time (s)] = 0.0
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    PolygonComponent fixation_listening
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [condition] = audiobook.status == FINISHED
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    ParallelOutComponent p_port_listening
      address = USB2TTL8
      disabled = True
      register = EIO
      startData = 125
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = .5
      syncScreen = True
      syncScreenRefresh = False
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  Routine Instructions
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    CodeComponent code_row_selection
      Code Type = Auto->JS
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      Begin Routine:
        import random
        NUMBER_OF_PAIRS=5
        indices = list(range(8))
        _ = random.shuffle(indices)
        selected_rows = indices[:NUMBER_OF_PAIRS]
        thisExp.addData('selected_rows', selected_rows)
    KeyboardComponent key_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent text_instructions
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [condition] = key_instructions.status == FINISHED
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      text [set every frame]:
        En cada ensayo escucharás dos historias simultáneas (una en cada oído). Tus tareas son

        1) Mantenerte quieto/a y mirar la cruz central.

        2) Prestar atención sólo a la historia indicada.

        3) Responder las preguntas con el teclado.

        Presioná ESPACIO para continuar...
    ParallelOutComponent p_port_instructions
      address = USB2TTL8
      disabled = True
      register = EIO
      startData = 50
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = .5
      syncScreen = True
      syncScreenRefresh = False
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  Routine Questionary2
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  Routine Questionary3
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  Routine GoodBye
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    KeyboardComponent final_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent final_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = final_key.status == FINISHED
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      text:
        ¡Listo! Terminó el experimento. ¡Gracias por participar!



        Apretá ESPACIO para finalizar...
    ParallelOutComponent p_port_final
      address = USB2TTL8
      disabled = True
      register = EIO
      startData = 175
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = .5
      syncScreen = True
      syncScreenRefresh = False
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  Routine Bips
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    SoundComponent bip
      forceEndRoutine = False
      sound [set every repeat] = ../data/bip.wav
      speakerIndex = 0.0
      startVal [time (s)] = 0.0
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    PolygonComponent fixation_bip
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [condition] = bip.status == FINISHED
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    ParallelOutComponent bips_p_port
      address = USB2TTL8
      disabled = True
      register = EIO
      startData = 100
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.5
      syncScreen = True
      syncScreenRefresh = False
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  Routine ConditionPrompt
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    CodeComponent prompt_code
      Code Type = Auto->JS
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      Begin Routine:
        flecha='<<<'  if target=='Left' else '>>>'
        lado='IZQUIERDO' if target=='Left' else 'DERECHO'
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp_prompt.status == FINISHED
      text [set every repeat] = $f"Presta atención a la historia del lado {lado} ({flecha}).\n\n\nApretá ESPACIO para continuar..."
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    KeyboardComponent key_resp_prompt
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ParallelOutComponent p_port_condition_prompt
      address = USB2TTL8
      disabled = True
      register = EIO
      startData = 75
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = .5
      syncScreen = True
      syncScreenRefresh = False
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  Routine Questionary
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        question = questions[questions_trial.thisRepN-1]
        correct_answer = correct_answers[questions_trial.thisRepN-1]
        answer_a = answers_a[questions_trial.thisRepN-1]
        answer_b = answers_b[questions_trial.thisRepN-1]
        answer_c = answers_c[questions_trial.thisRepN-1]
    KeyboardComponent key_resp_questionary
      allowedKeys = 'a', 'b', 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent questionary_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = key_resp_questionary.status == FINISHED
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      text [set every repeat]:
        $f"{question}\n\n A: {answer_a}\n\n B: {answer_b}\n\n C: {answer_c}\n\n Presioná la opción que creas correcta (teclas A, B ó C)"
    ParallelOutComponent p_port_questionary
      address = 0x0378
      disabled = True
      register = EIO
      startData = 150
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = .5
      syncScreen = True
      syncScreenRefresh = False
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Flow
  Routine Instructions
  LoopInitiator condition_trials loopType="TrialHandler"
    Selected rows = $selected_rows
    conditionsFile = conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'story_a_side': 'left', 'story_b_side': 'right', 'story_a_voice': 'F', 'story_b_voice': 'M', 'condition_label': 'FL_MR_AB', 'target': 'Left'},
      {'story_a_side': 'left', 'story_b_side': 'right', 'story_a_voice': 'F', 'story_b_voice': 'M', 'condition_label': 'FL_MR_AB', 'target': 'Right'},
      {'story_a_side': 'left', 'story_b_side': 'right', 'story_a_voice': 'M', 'story_b_voice': 'F', 'condition_label': 'FR_ML_AB', 'target': 'Left'},
      {'story_a_side': 'left', 'story_b_side': 'right', 'story_a_voice': 'M', 'story_b_voice': 'F', 'condition_label': 'FR_ML_AB', 'target': 'Right'},
      {'story_a_side': 'right', 'story_b_side': 'left', 'story_a_voice': 'F', 'story_b_voice': 'M', 'condition_label': 'FL_MR_BA', 'target': 'Left'},
      {'story_a_side': 'right', 'story_b_side': 'left', 'story_a_voice': 'F', 'story_b_voice': 'M', 'condition_label': 'FL_MR_BA', 'target': 'Right'},
      {'story_a_side': 'right', 'story_b_side': 'left', 'story_a_voice': 'M', 'story_b_voice': 'F', 'condition_label': 'FR_ML_BA', 'target': 'Left'},
      {'story_a_side': 'right', 'story_b_side': 'left', 'story_a_voice': 'M', 'story_b_voice': 'F', 'condition_label': 'FR_ML_BA', 'target': 'Right'}]
    Routine ConditionPrompt
    LoopInitiator trials loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 10
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      Routine Bips
    LoopTerminator trials
    Routine Listening
    LoopInitiator trials_2 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 10
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      Routine Bips
    LoopTerminator trials_2
    LoopInitiator questions_trial loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 3
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      Routine Questionary
    LoopTerminator questions_trial
  LoopTerminator condition_trials
  Routine GoodBye
