PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = dichotic_listening_probe
  frameRateMsg = Espera mientras se configura el experimento...
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Listening
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    CodeComponent code_listening
      Code Type = Auto->JS
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      Begin Routine:
        # Set correct audio
        audiobook = audios[condition_trials.thisN]
        #port.write(bytes([int(100)]))
        print(100)
        # t is measured since routine start
        thisExp.addData("time_audiobook_started",t)
        audiobook.play()
      Each Frame:
        # When time exceed audiobook duration, end component
        # t is measured since routine start
        if t >= audiobook.duration:
            continueRoutine = False
            audiobook.stop()
            thisExp.addData("time_audiobook_finished",t)
      End Routine:
        #port.write(bytes([int(105)]))
        print(105)
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine Instructions
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    CodeComponent code_row_selection
      Code Type = Auto->JS
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      Before Experiment:
        #import serial
        #port = serial.Serial(
        #    'COM3', baudrate=115200, timeout=0
        #)
      Begin Experiment:
        from psychopy import sound
        import pandas as pd
        import random

        # Define which rows to use
        NUMBER_OF_PAIRS=5
        selected_rows = random.sample(
            range(8), NUMBER_OF_PAIRS
        )
        thisExp.addData('selected_rows', selected_rows)

        # Read conditions, possible stimuli combinations and questionaries
        conditions = pd.read_csv(
            "conditions.csv",
            header=0,
            delimiter=','
        )
        audiobook_combinations = pd.read_csv(
            "audiobook_combinations_probes_pruebas.csv",
            header=0,
            delimiter=','
        )
        audiobook_questionary = pd.read_csv(
            "audiobook_questionary.csv",
            header=0,
            delimiter=','
        )

        # Store in memory audiobooks and relevant parameters
        attended_stories = []
        audio_filepaths = []
        questionaries = []
        targets = []
        audios = []
        for n_r, row in enumerate(selected_rows):
            condition_selected = conditions.iloc[row]
            targets.append(condition_selected['target'])

            # Define filepath and attended story
            filter_condition1 = audiobook_combinations['condition_label']==condition_selected["condition_label"]
            filter_condition2 = audiobook_combinations['ordered']==condition_selected["ordered"]
            audiobooks_possible_combinations = audiobook_combinations[filter_condition1&filter_condition2]

            # Get pairs, 1,2; 3,4; 5,6; ...
            n_story = (n_r+1)*2-1 # 1,3,5,7, ...
            filter_A = audiobooks_possible_combinations['story_A']==n_story
            filter_B = audiobooks_possible_combinations['story_B']==n_story
            selected_audiobook = audiobooks_possible_combinations[filter_A|filter_B]
            audio_filepath = selected_audiobook['filename'].values[0]
            audio_filepaths.append(audio_filepath)
            audios.append(
                sound.Sound(audio_filepath , hamming=True)
            )
            attended = f'story_{condition_selected["target_label"]}'
            attended_story = selected_audiobook[attended].values[0]
            attended_stories.append(attended_story)
            questionaries.append(
                audiobook_questionary.iloc[attended_story-1]
            )
        print(attended_stories)
        print(audio_filepaths)
        print(questionaries)
        print(targets)
        print(audios)
      Begin Routine:
        #port.write(bytes([int(25)]))
        print(25)
      End Routine:
        #port.write(bytes([int(30)]))
        print(25)
    KeyboardComponent key_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent text_instructions
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [condition] = key_instructions.status == FINISHED
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      text [set every frame]:
        En cada ensayo escucharás dos historias simultáneas (una en cada oído). Tus tareas son

        1) Mantenerte quieto/a y mirar la cruz central.

        2) Prestar atención sólo a la historia indicada.

        3) Responder las preguntas con el teclado.

        Presioná ESPACIO para continuar...
  Routine Questionary2
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  Routine Questionary3
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  Routine GoodBye
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    CodeComponent code_bye
      Code Type = Auto->JS
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      Begin Routine:
        #port.write(bytes([int(230)])
        print(230)
      End Routine:
        #port.write(bytes([int(240)])
        print(240)
    KeyboardComponent final_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent final_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = final_key.status == FINISHED
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      text:
        ¡Listo! Terminó el experimento. ¡Gracias por participar!



        Apretá ESPACIO para finalizar...
  Routine Bips
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    CodeComponent code_bip
      Code Type = Auto->JS
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      Begin Routine:
        if currentLoop.name == "bip_trials1":
            trigger = 45
        else:
            trigger = 150

        #port.write(bytes([int(trigger+currentLoop.thisN*3)]))
        print(int(trigger+currentLoop.thisN*3))

        # When the loop reaches the end, there will be no silence added
        if currentLoop.thisN == (currentLoop.nTotal - 1):
            final_silence.status = FINISHED
      End Routine:
        #port.write(bytes([int(trigger+currentLoop.thisN*3+1)]))
        print(int(trigger+currentLoop.thisN*3+1))
    SoundComponent bip
      forceEndRoutine = False
      sound [set every repeat] = ../data/processed_audios/bip.ogg
      startVal [time (s)] = 0.0
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    PolygonComponent fixation_bip
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [condition] = bip.status == FINISHED 
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    PolygonComponent final_silence
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [condition] = bip.status==FINISHED
      stopVal [duration (s)] = 0.5
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  Routine ConditionPrompt
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    CodeComponent code_prompt
      Code Type = Auto->JS
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      Begin Routine:
        #port.write(bytes([int(35)]))
        print(35)

        flecha='<<<'  if target=='Left' else '>>>'
        lado='IZQUIERDO' if target=='Left' else 'DERECHO'
      End Routine:
        #port.write(bytes([int(40)])
        print(40)
    TextComponent text_prompt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp_prompt.status == FINISHED
      text [set every repeat] = $f"Presta atención a la historia del lado {lado} ({flecha}).\n\n\nApretá ESPACIO para continuar..."
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    KeyboardComponent key_resp_prompt
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Questionary
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    CodeComponent code_questionary
      Code Type = Auto->JS
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      Begin Routine:
        question = questions[questions_trial.thisRepN-1]
        correct_answer = correct_answers[questions_trial.thisRepN-1]
        answer_a = answers_a[questions_trial.thisRepN-1]
        answer_b = answers_b[questions_trial.thisRepN-1]
        answer_c = answers_c[questions_trial.thisRepN-1]

        #port.write(bytes([int(200+currentLoop.thisN*3)]))
        print(int(200+currentLoop.thisN*3))
      End Routine:
        #port.write(bytes([int(200+1+currentLoop.thisN*3)]))
        print(int(200+1+currentLoop.thisN*3))
    KeyboardComponent key_resp_questionary
      allowedKeys = 'a', 'b', 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent questionary_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = key_resp_questionary.status == FINISHED
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      text [set every repeat]:
        $f"{question}\n\n A: {answer_a}\n\n B: {answer_b}\n\n C: {answer_c}\n\n Presioná la opción que creas correcta (teclas A, B ó C)"
  Routine QuestionaryVariables
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    CodeComponent code_questionary_2
      Code Type = Auto->JS
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      Begin Routine:
        attended_story_ = attended_stories[condition_trials.thisN]
        audio_filepath_ = audio_filepaths[condition_trials.thisN]
        questionary_ = questionaries[condition_trials.thisN]

        # Add to log
        thisExp.addData('attended_story', attended_story_)
        thisExp.addData('audio_filepath', audio_filepath_)
        thisExp.addData('target', target)

        # Define new variables
        correct_answers = []
        questions = []
        answers_a = []
        answers_b = []
        answers_c = []
        for i in range(1, 4):
            correct_answer = questionary_[f'correct_answer{i}']
            question = questionary_[f'question{i}']
            answer_a = questionary_[f'answer{i}a']
            answer_b = questionary_[f'answer{i}b']
            answer_c = questionary_[f'answer{i}c']
            correct_answers.append(correct_answer)
            questions.append(question)
            answers_a.append(answer_a)
            answers_b.append(answer_b)
            answers_c.append(answer_c)

            # Add to log
            thisExp.addData(f'correct_answer{i}', correct_answer)
            thisExp.addData(f'question{i}', question)
            thisExp.addData(f'answer{i}a', answer_a)
            thisExp.addData(f'answer{i}b', answer_b)
            thisExp.addData(f'answer{i}c', answer_c)
  Routine Listening1
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    SoundComponent sound_1
      forceEndRoutine = False
      sound [set every repeat] = C:/Users/jocta/repos/Dichotic/data/processed_audios/attention_probe.wav
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
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Flow
  Routine Instructions
  LoopInitiator condition_trials loopType="TrialHandler"
    Selected rows = $selected_rows
    conditionsFile = conditions.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('story_a_side', 'left'), ('story_b_side', 'right'), ('story_a_voice', 'F'), ('story_b_voice', 'M'), ('condition_label', 'FL_MR'), ('ordered', np.True_), ('target', 'Left'), ('target_label', 'A')]),
      OrderedDict([('story_a_side', 'left'), ('story_b_side', 'right'), ('story_a_voice', 'F'), ('story_b_voice', 'M'), ('condition_label', 'FL_MR'), ('ordered', np.True_), ('target', 'Right'), ('target_label', 'B')]),
      OrderedDict([('story_a_side', 'left'), ('story_b_side', 'right'), ('story_a_voice', 'M'), ('story_b_voice', 'F'), ('condition_label', 'FR_ML'), ('ordered', np.True_), ('target', 'Left'), ('target_label', 'A')]),
      OrderedDict([('story_a_side', 'left'), ('story_b_side', 'right'), ('story_a_voice', 'M'), ('story_b_voice', 'F'), ('condition_label', 'FR_ML'), ('ordered', np.True_), ('target', 'Right'), ('target_label', 'B')]),
      OrderedDict([('story_a_side', 'right'), ('story_b_side', 'left'), ('story_a_voice', 'F'), ('story_b_voice', 'M'), ('condition_label', 'FL_MR'), ('ordered', np.False_), ('target', 'Left'), ('target_label', 'A')]),
      OrderedDict([('story_a_side', 'right'), ('story_b_side', 'left'), ('story_a_voice', 'F'), ('story_b_voice', 'M'), ('condition_label', 'FL_MR'), ('ordered', np.False_), ('target', 'Right'), ('target_label', 'B')]),
      OrderedDict([('story_a_side', 'right'), ('story_b_side', 'left'), ('story_a_voice', 'M'), ('story_b_voice', 'F'), ('condition_label', 'FR_ML'), ('ordered', np.False_), ('target', 'Left'), ('target_label', 'A')])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
    Routine ConditionPrompt
    LoopInitiator bip_trials1 loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 10
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      Routine Bips
    LoopTerminator bip_trials1
    Routine Listening
    LoopInitiator bip_trials2 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 10
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      Routine Bips
    LoopTerminator bip_trials2
    Routine QuestionaryVariables
    LoopInitiator questions_trial loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 3
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      Routine Questionary
    LoopTerminator questions_trial
  LoopTerminator condition_trials
  Routine GoodBye
